# 1 "/u/exp/stan/nmr/lists/pp/zgig.bb"
;zgig.bb
;avance-version
;1D sequence with inverse gated decoupling


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;Avance.incl
;
;version  99/08/02


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
"d11=30m"


1 ze
  d11 pl12:f2
2 d1 do:f2
  p1 ph1
  go=2 ph31 cpd2:f2
  wr #0
  d11 do:f2
exit

ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                             [30 msec]
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
