# 1 "/u/exp/stan/nmr/lists/pp/zgprse.bb"
;zgprse.bb
;avance-version
;1D spin echo with presaturation


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;Avance.incl
;
;version  99/08/02


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
"p2=p1*2"

"d12=20u"
"d13=3u"
"d2=1s/(cnst2*2)"

1 ze
2 d12 pl9:f1
  d1 cw:f1
  d13 do:f1
  d12 pl1:f1
  p1 ph1
  d2
  p2 ph1
  d2
  go=2 ph31
  wr #0 
exit


ph1=0 0 1 1 2 2 3 3
;ph2=0 2 0 2 1 3 1 3 
ph31=0 0 1 1 2 2 3 3


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p19: power for presaturation
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J)HH
;cnst2: = J(HH)
;NS: 8 * n

